#================================================================

  # VISUALISATION 
#/control/execute mac/visu.mac
#/vis/disable

#================================================================

  # MATERIALS
/gate/geometry/setMaterialDatabase 	    data/HFMaterials2014.db

#================================================================

 # GEOMETRY

# WORLD
#/gate/world/setMaterial                 Vacuum
/gate/world/setMaterial                 Air
/gate/world/geometry/setXLength         5.1 m
/gate/world/geometry/setYLength         5.1 m
/gate/world/geometry/setZLength         5.1 m
/gate/world/vis/setVisible              0

/control/alias CubeSize "100"

# TestBox
/gate/world/daughters/name              TestBox
/gate/world/daughters/insert            box
/gate/TestBox/setMaterial               Lead
/gate/TestBox/geometry/setXLength       {CubeSize} cm
/gate/TestBox/geometry/setYLength       {CubeSize} cm
/gate/TestBox/geometry/setZLength       {CubeSize} cm
/gate/TestBox/placement/setTranslation  0 0 0 cm
/gate/TestBox/vis/setVisible            1
/gate/TestBox/vis/setColor              gray

#================================================================

  # PHYSICS

/gate/physics/addPhysicsList        emstandard_opt4
#/gate/physics/addPhysicsList 		QBBC_EMZ
#/gate/physics/addPhysicsList 		QGSP_BIC_HP

#================================================================

  # PARAMETERS
/control/alias cut "0.1"
/control/alias Ionization "78"
  
  #Cut
	/gate/physics/Gamma/SetCutInRegion      TestBox {cut} mm
	/gate/physics/Electron/SetCutInRegion   TestBox {cut} mm
	/gate/physics/Positron/SetCutInRegion   TestBox {cut} mm
	

  #Tracking cut
	/gate/physics/SetMinRemainingRangeInRegion TestBox {cut} mm
	/gate/physics/ActivateSpecialCuts e-
	/gate/physics/ActivateSpecialCuts proton

  #stepLimiter
	/gate/physics/SetMaxStepSizeInRegion world 100 mm
	/gate/physics/SetMaxStepSizeInRegion TestBox {cut} mm
	/gate/physics/ActivateStepLimiter proton
	/gate/physics/ActivateStepLimiter deuteron
	/gate/physics/ActivateStepLimiter triton
	/gate/physics/ActivateStepLimiter alpha
	/gate/physics/ActivateStepLimiter GenericIon

  #Ionization potential of water
	/gate/geometry/setIonisationPotential Water {Ionization} eV
	/gate/geometry/setIonisationPotential G4_WATER {Ionization} eV

#================================================================

  # OUTPUTS
  
# TestBox

/gate/actor/addActor                               DoseActor   edepTest
/gate/actor/edepTest/attachTo                      TestBox
/gate/actor/edepTest/stepHitType                   random
/gate/actor/edepTest/setPosition                   0 0 0 cm
/gate/actor/edepTest/setResolution                 1 1 1

/gate/actor/edepTest/enableDose                    false
/gate/actor/edepTest/enableDoseToWater             false
/gate/actor/edepTest/enableUncertaintyDose         false

/gate/actor/edepTest/enableEdep                    true
/gate/actor/edepTest/enableSquaredEdep             true

/gate/actor/edepTest/save                         outputA1/edepTest.txt
/gate/actor/edepTest/saveEveryNSeconds            10

#================================================================

  # INITIALISATION
/gate/run/initialize

#================================================================

  # SOURCE

# TPSPencilBeam SOURCE

/gate/source/addSource                          PBS     TPSPencilBeam
/gate/source/PBS/setTestFlag                    false
/gate/source/PBS/setFlatGenerationFlag          false
/gate/source/PBS/setPlan                        data/PlanDescriptionFile.txt
/gate/source/PBS/setParticleType                proton
/gate/source/PBS/setSpotIntensityAsNbIons       true
/gate/source/PBS/setSourceDescriptionFile       data/SourceDescriptionFile.txt
/gate/source/PBS/setBeamConvergence             true
#================================================================

  # SEED
/gate/random/setEngineSeed 1234567890
#/gate/random/setEngineName MersenneTwister
#/gate/random/setEngineSeed auto

#================================================================

  # START BEAMS
/gate/application/setTotalNumberOfPrimaries 1000
/gate/application/start
#/geometry/test/run

