#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize

# Enable the following lines to display available and enabled processes
# /gate/physics/processList Available
# /gate/physics/processList Enabled


#=====================================================
# VISUALISATION
#=====================================================

#/control/execute mac/visu.mac

#=====================================================
# BEAMS
#=====================================================

/control/execute mac/beam-photon.mac

#=====================================================
# START BEAMS
#=====================================================

/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto
/gate/application/setTotalNumberOfPrimaries 10000
/gate/application/start
