#########################
# SET MATERIAL DATABASE #
#########################
/gate/geometry/setMaterialDatabase ../../../misc/GateMaterials.db

#########
# WORLD #
#########
/gate/world/geometry/setXLength 50. cm
/gate/world/geometry/setYLength 50. cm
/gate/world/geometry/setZLength 50. cm
/gate/world/setMaterial Air

#######################################
# CT scanner for small animal imaging #
# 150x200 pixels                      #
# size of pixels : 0.5x0.5x1.0 mm3    #
# pixels are made up of silicon       #
#######################################
/control/execute CTScanner.mac

###################################
# phantom in rotation (1 deg/s) : #
#  * 1 water cylinder             #
#  * 4 balls                      #
###################################
/control/execute phantom.mac
/gate/waterCylinder/moves/insert rotation
/gate/waterCylinder/rotation/setSpeed 1. deg/s
/gate/waterCylinder/rotation/setAxis 0 0 1

###########
# PHYSICS #
###########
/control/execute physics.mac

#############
# DIGITIZER #
#############
/control/execute digitizer.mac

##########
# OUTPUT #
##########
/control/execute output.mac

#############
# VERBOSITY #
#############
/control/execute verbose.mac

##################
# INITIALIZATION #
##################
/gate/run/initialize

############################
# VISUALIZATION PARAMETERS #
############################
#/control/execute visu.mac
#/vis/disable

##############
# SOURCE GPS #
##############
/control/execute source.mac

###############
# ACQUISITION #
###############
/control/execute acquisition.mac

exit
