#---------------------------------------------------------------- #
#                    V E R B O S I T Y	LEVEL         		  # 
#---------------------------------------------------------------- #

/gate/verbose Physic    0
/gate/verbose Cuts      0
/gate/verbose SD        0
/gate/verbose Actions   0
/gate/verbose Actor     0
/gate/verbose Step      0
/gate/verbose Error     0
/gate/verbose Warning   0
/gate/verbose Output    0
/gate/verbose Beam      0
/gate/verbose Volume    0
/gate/verbose Image     0
/gate/verbose Geometry  0
/gate/verbose Core      0

/run/verbose 		0
/event/verbose 		0
/tracking/verbose 	0	      

